PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent presentation
      text [set every repeat] = $Word.decode('utf-8')
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent importing
      Begin Experiment:
        import pandas as pd

        df = pd.read_csv('../data/sampled.csv',encoding = 'latin-1')

        Words = df['Word'].values

        idx = 0

        import sys

        reload(sys)

        sys.setdefaultencoding('utf-8')
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\data\sampled.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Category': 'animal', 'Mean_Familiarity': 4.4000000000000004, 'SD_Concreteness': 1.5307950003999999, 'Word': 'Abejorro', 'Mean_Arousal': 7.0789473684000006, 'Mean_Valence': 2.1315789474, 'SD_Familiarity': 2.4152294577000002, 'Length': 8, 'Frequency': 0.17999999999999999, 'picked': True, 'English': 'Bumblebee', 'log_frequency': -1.7147984280999999, 'Mean_Concreteness': 7.5199999999999996, 'SD_Arousal': 1.5833863633, 'SD_Valence': 1.3187023234999999},
      {'Category': 'animal', 'Mean_Familiarity': 4.2400000000000002, 'SD_Concreteness': 2.6223399220000001, 'Word': 'Almeja', 'Mean_Arousal': 3.4210526316000003, 'Mean_Valence': 4.9210526316000003, 'SD_Familiarity': 2.3853720884, 'Length': 6, 'Frequency': 0.54000000000000004, 'picked': True, 'English': 'Clam', 'log_frequency': -0.6161861394, 'Mean_Concreteness': 6.7199999999999998, 'SD_Arousal': 1.7496189384, 'SD_Valence': 1.6986732334000001},
      {'Category': 'animal', 'Mean_Familiarity': 3.3199999999999998, 'SD_Concreteness': 1.9433647796, 'Word': 'Asno', 'Mean_Arousal': 4.5263157894999999, 'Mean_Valence': 5.3157894736999998, 'SD_Familiarity': 2.3043437243999998, 'Length': 4, 'Frequency': 3.9300000000000002, 'picked': True, 'English': 'Donkey', 'log_frequency': 1.3686394259000001, 'Mean_Concreteness': 6.8799999999999999, 'SD_Arousal': 1.5894388284999998, 'SD_Valence': 1.6942711605},
      {'Category': 'animal', 'Mean_Familiarity': 3.4399999999999999, 'SD_Concreteness': 1.9209372712000001, 'Word': 'Babosa', 'Mean_Arousal': 5.0789473683999997, 'Mean_Valence': 2.1315789474, 'SD_Familiarity': 2.2000000000000002, 'Length': 6, 'Frequency': 0.35999999999999999, 'picked': True, 'English': 'Slug', 'log_frequency': -1.0216512474999999, 'Mean_Concreteness': 6.7599999999999998, 'SD_Arousal': 2.5296253215000002, 'SD_Valence': 1.3390406535999999}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
    Routine trial
  LoopTerminator trials
